PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Team 3 Oddball no flashing (final!)
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine introduction
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = You will now be beginning our experiment. A lab member will be nearby at all times if you'd like to stop or run into any difficulties. You will have 1 break as well.
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Define your full greyscale images list using raw strings for Windows paths:
        greyImagesList = [
            r"C:\Users\General Use\Desktop\NT Group 3 24-25\OASIS Neutrals\greyscale-007.jpg",
            r"C:\Users\General Use\Desktop\NT Group 3 24-25\OASIS Neutrals\greyscale-015.jpg",
            r"C:\Users\General Use\Desktop\NT Group 3 24-25\OASIS Neutrals\greyscale-136.jpg",
            r"C:\Users\General Use\Desktop\NT Group 3 24-25\OASIS Neutrals\greyscale-051.jpg",
            r"C:\Users\General Use\Desktop\NT Group 3 24-25\OASIS Neutrals\greyscale-142.jpg",
        ]
    CodeComponent LSL_setup
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Create an LSL outlet for sending markers
        info = StreamInfo(name='PsychoPyMarkers', type='Markers', channel_count=1, channel_format='float32', source_id='psycho_marker_stream')
        outlet = StreamOutlet(info)
        print("LSL outlet for PsychoPy markers initialized.")
  Routine grayscale_pictures
    ImageComponent greyscale_pic
      image [set every repeat] = $GreyImagePath
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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  Routine stimulus_pictures
    ImageComponent stimulus_pic
      image [set every repeat] = $OasisImagePath
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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  Routine thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        The experiment is now over.

        A lab member will be coming over to help you shortly.

        Thank you!
  Routine picture_delay
    CodeComponent delay_randomization
      Code Type = Auto->JS
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      Begin Routine:
        import random

        washout_duration = random.uniform(0.3, 0.5)
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $washout_duration
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  Routine practice
    ImageComponent pracice_image
      image [set every repeat] = $OddballPracticeImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine oddballroutine
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # --- Combined Code Component in oddball routine ---


        #anikaddedmarch26
        # This assumes you've already built a dictionary of preloaded images
        # in an earlier routine (e.g., in your outerloop routine):
        if 'preloadedImages' in globals() and thisImage in preloadedImages:
            # Override the image component's image attribute with the preloaded image’s file path.
            # Note: The preloadedImages[thisImage] is an ImageStim that was created earlier.
            # You can set the component’s image attribute directly.
            oddball_picture.image = preloadedImages[thisImage].image

        #normal
        # Select the current inner loop trial index (0-based)
        current_index = inner_index

        # Select the image from trialImages based on the current index:
        thisImage = trialImages[current_index]

        # Log the image (e.g., to your data file) for later reference:
        thisExp.addData('current_image', thisImage)
        thisExp.addData('current_index', current_index)

        # Determine whether the current image is the oddball:
        if current_index == oddball_index:
            # Use the oddball's number from your conditions file
            image_number = ImageNumber  # Must be loaded from your outer loop conditions file
            image_type = "Oddball"
        else:
            # For greyscale images, use the current index (or another scheme)
            image_number = current_index
            image_type = "Greyscale"

        # Compute marker value (adjust formula as needed)
        marker_value = float(1 + float(image_number) / 1000)

        # Flag to prevent pushing marker multiple times (use only within this routine)
        if not hasattr(thisImage, 'flip_done'):
            oddball_picture.flip_done = False

        # Log the marker to the console (optional):
        print(f"Image: {thisImage}, Type: {image_type}, Marker Value: {marker_value}")

        # Increment the inner index for the next trial:
        inner_index += 1
      Each Frame:
        if oddball_picture.status == STARTED and not oddball_picture.flip_done:
            win.flip()  # Update the window (this happens at the end of the frame)
            outlet.push_sample([marker_value])  # Send the LSL marker after flip
            oddball_picture.flip_done = True  # Flag it to prevent resending the marker
    ImageComponent oddball_picture
      image [set every repeat] = $thisImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine outerloopcode
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # For using all 19 greyscale images:
        totalGreyscale = len(greyImagesList)  # should be 19
        totalSlots = totalGreyscale + 1       # 19 + 1 = 20

        # Randomly choose a slot for the oddball image (0-indexed)
        oddball_index = random.randint(1, totalSlots - 1)

        # Create the list of images for this outer trial:
        trialImages = greyImagesList.copy()  # Make a copy of the greyscale list
        trialImages.insert(oddball_index, ImagePath)  # Insert oddball at random position

        # Initialize the counter for the inner loop:
        inner_index = 0
  Routine halfway_break
    TextComponent text_instr_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = You've completed half of the experiment! Click next when you're ready to continue.
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    ImageComponent image_next_2
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine introduction
  LoopInitiator Stimulus_Trials loopType="TrialHandler"
    conditionsFile = ODDBALL Picture Set/Oddball Target Paths.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Pouch\\Pouch 5.jpg', 'ImageNumber': 304, 'Condition': 'Pouch', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Cigarette\\Cigarette 3.jpg', 'ImageNumber': 102, 'Condition': 'Cigarette', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Vape\\Vape 10.jpg', 'ImageNumber': 409, 'Condition': 'Vape', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Cigarette\\Cigarette 2.jpg', 'ImageNumber': 101, 'Condition': 'Cigarette', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Vape\\Vape 5.jpg', 'ImageNumber': 404, 'Condition': 'Vape', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Pouch\\Pouch 3.jpg', 'ImageNumber': 302, 'Condition': 'Pouch', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Vape\\Vape 1.jpg', 'ImageNumber': 400, 'Condition': 'Vape', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Cigarette\\Cigarette 6.jpg', 'ImageNumber': 105, 'Condition': 'Cigarette', 'Type': 'Cue'}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
    Routine outerloopcode
    LoopInitiator greyscale_loop loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine oddballroutine
      Routine picture_delay
    LoopTerminator greyscale_loop
  LoopTerminator Stimulus_Trials
  Routine halfway_break
  LoopInitiator stimulus_loop_repeat loopType="TrialHandler"
    conditionsFile = ODDBALL Picture Set/Oddball Target Paths.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Pouch\\Pouch 5.jpg', 'ImageNumber': 304, 'Condition': 'Pouch', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Cigarette\\Cigarette 3.jpg', 'ImageNumber': 102, 'Condition': 'Cigarette', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Vape\\Vape 10.jpg', 'ImageNumber': 409, 'Condition': 'Vape', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Cigarette\\Cigarette 2.jpg', 'ImageNumber': 101, 'Condition': 'Cigarette', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Vape\\Vape 5.jpg', 'ImageNumber': 404, 'Condition': 'Vape', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Pouch\\Pouch 3.jpg', 'ImageNumber': 302, 'Condition': 'Pouch', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Vape\\Vape 1.jpg', 'ImageNumber': 400, 'Condition': 'Vape', 'Type': 'Cue'},
      {'ImagePath': 'C:\\Users\\General Use\\Desktop\\NT Group 3 24-25\\ODDBALL Picture Set\\Cigarette\\Cigarette 6.jpg', 'ImageNumber': 105, 'Condition': 'Cigarette', 'Type': 'Cue'}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
    Routine outerloopcode
    LoopInitiator greyscale_loop_repeat loopType="TrialHandler"
      loopType = random
      nReps = 6
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      Routine oddballroutine
      Routine picture_delay
    LoopTerminator greyscale_loop_repeat
  LoopTerminator stimulus_loop_repeat
  Routine thanks
